PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1500, 830]
  expName = solo_project_final2.0exp
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine level1
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    PolygonComponent square1
      fillColor = red
      pos = (-150, 0)
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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    PolygonComponent square2
      fillColor = cyan
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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    PolygonComponent square3
      fillColor = green
      pos = (150, 0)
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.9
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    PolygonComponent square3test
      fillColor [set every repeat] = $test_stimulus
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.1
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      correctAns = $corr_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine level2
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    ImageComponent jap_character1
      image = jap_Character1.jpg
      pos = (-150, 0)
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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    ImageComponent jap_character2
      image = jap_character2.png
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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    ImageComponent jap_character3
      image = jap_character3.jpg
      pos = (150, 0)
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.9
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    ImageComponent jap_test
      image [set every repeat] = $jap_test_stimulus
      size = (100, 100)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.1
      units = pix
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    KeyboardComponent key_resp_1
      allowedKeys = 'y','n'
      correctAns = $corr_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine level3
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    ImageComponent blob1
      image = blob1.jpg
      pos = (-150, 0)
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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    ImageComponent blob2
      image = blob2.jpg
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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    ImageComponent blob3
      image = blob3.jpg
      pos = (150, 0)
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.9
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    ImageComponent blob_test
      image [set every repeat] = $blob_test_stimulus
      size = (100, 100)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.1
      units = pix
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n'
      correctAns = $corr_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine level4
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    ImageComponent cube1
      image = cube1.jpg
      pos = (-150, 0)
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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    ImageComponent cube2
      image = cube2.jpg
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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    ImageComponent cube3
      image = cube3.jpg
      pos = (150, 0)
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.9
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    ImageComponent cube_test_2
      image [set every repeat] = $cube_test_stimulus
      size = (100, 100)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.1
      units = pix
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n'
      correctAns = $corr_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine interval
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine interval_2
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine interval_3
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine instruction
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions:

        A list of images will be displayed followed by a presentation of a single image that would either be from the previous list or not.

        Your task is to respond by pressing 'y' key if the image displayed was present in the list, or 'n' if it was not.

        Press 'space bar' when ready!
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine interval_4
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Flow
  Routine instruction
  Routine interval_4
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_solo_project_final2.0.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('test_stimulus', 'green'), ('present', 1), ('corr_key_resp', 'r')]),
      OrderedDict([('test_stimulus', 'cyan'), ('present', 1), ('corr_key_resp', 'r')]),
      OrderedDict([('test_stimulus', 'red'), ('present', 1), ('corr_key_resp', 'r')]),
      OrderedDict([('test_stimulus', 'yellow'), ('present', 0), ('corr_key_resp', 'w')]),
      OrderedDict([('test_stimulus', 'purple'), ('present', 0), ('corr_key_resp', 'w')])]
    Routine level1
  LoopTerminator trials
  Routine interval
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions2_solo_project_final2.0.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('jap_test_stimulus', 'C:\\Users\\DELL\\Desktop\\Lab_in_Psych\\solo_project_final2.0\\jap_character1.jpg'), ('presence', 'yes'), ('corr_key_resp', 'y')]),
      OrderedDict([('jap_test_stimulus', 'C:\\Users\\DELL\\Desktop\\Lab_in_Psych\\solo_project_final2.0\\jap_character2.png'), ('presence', 'yes'), ('corr_key_resp', 'y')]),
      OrderedDict([('jap_test_stimulus', 'C:\\Users\\DELL\\Desktop\\Lab_in_Psych\\solo_project_final2.0\\jap_character3.jpg'), ('presence', 'yes'), ('corr_key_resp', 'y')]),
      OrderedDict([('jap_test_stimulus', 'C:\\Users\\DELL\\Desktop\\Lab_in_Psych\\solo_project_final2.0\\jap_character4.png'), ('presence', 'no'), ('corr_key_resp', 'n')]),
      OrderedDict([('jap_test_stimulus', 'C:\\Users\\DELL\\Desktop\\Lab_in_Psych\\solo_project_final2.0\\jap_character5.png'), ('presence', 'no'), ('corr_key_resp', 'n')])]
    Routine level2
  LoopTerminator trials_2
  Routine interval_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = condition3_solo_project_final2.0.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('blob_test_stimulus', 'C:\\Users\\DELL\\Desktop\\Lab_in_Psych\\solo_project_final2.0\\blob1.jpg'), ('presence', 'yes'), ('corr_key_resp', 'y')]),
      OrderedDict([('blob_test_stimulus', 'C:\\Users\\DELL\\Desktop\\Lab_in_Psych\\solo_project_final2.0\\blob2.jpg'), ('presence', 'yes'), ('corr_key_resp', 'y')]),
      OrderedDict([('blob_test_stimulus', 'C:\\Users\\DELL\\Desktop\\Lab_in_Psych\\solo_project_final2.0\\blob3.jpg'), ('presence', 'yes'), ('corr_key_resp', 'y')]),
      OrderedDict([('blob_test_stimulus', 'C:\\Users\\DELL\\Desktop\\Lab_in_Psych\\solo_project_final2.0\\blob4.jpg'), ('presence', 'no'), ('corr_key_resp', 'n')]),
      OrderedDict([('blob_test_stimulus', 'C:\\Users\\DELL\\Desktop\\Lab_in_Psych\\solo_project_final2.0\\blob5.jpg'), ('presence', 'no'), ('corr_key_resp', 'n')])]
    Routine level3
  LoopTerminator trials_3
  Routine interval_3
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = conditions4_solo_project_final2.0.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('cube_test_stimulus', 'C:\\Users\\DELL\\Desktop\\Lab_in_Psych\\solo_project_final2.0\\cube1.jpg'), ('presence', 'yes'), ('corr_key_resp', 'y')]),
      OrderedDict([('cube_test_stimulus', 'C:\\Users\\DELL\\Desktop\\Lab_in_Psych\\solo_project_final2.0\\cube2.jpg'), ('presence', 'yes'), ('corr_key_resp', 'y')]),
      OrderedDict([('cube_test_stimulus', 'C:\\Users\\DELL\\Desktop\\Lab_in_Psych\\solo_project_final2.0\\cube3.jpg'), ('presence', 'yes'), ('corr_key_resp', 'y')]),
      OrderedDict([('cube_test_stimulus', 'C:\\Users\\DELL\\Desktop\\Lab_in_Psych\\solo_project_final2.0\\cube4.jpg'), ('presence', 'no'), ('corr_key_resp', 'n')]),
      OrderedDict([('cube_test_stimulus', 'C:\\Users\\DELL\\Desktop\\Lab_in_Psych\\solo_project_final2.0\\cube5.jpg'), ('presence', 'no'), ('corr_key_resp', 'n')])]
    Routine level4
  LoopTerminator trials_4
